/**
 * Script used to run another script once for every position during 
 * a Micro-Manager acquisition
 */
import org.micromanager.api.MultiStagePosition;
import org.micromanager.api.MMAcquisition;
import java.io.BufferedWriter;
import java.io.FileWriter;
import java.util.prefs.Preferences;
import java.awt.Color;


script = "D:\\projects\\mnfinder\\mn2.bsh";

channelGroup = "Channels";
imagingChannel = "Epi-Cy5-PhotoTarget";
afterZapChannel = "Epi-Cherry";
nrImagesPerWell = 2;
saveLocation = "D:\\Users\\Susana\\20150416\\screen";
saveZappedLocation = saveLocation + "\\Zapped";



//////////DO NOT EDIT BELOW THIS LINE////////////////

// maintain some form of persistence using prefs
// if (prefs == null) 
//	prefs = Preferences.userNodeForPackage(this.getClass());
	
gui.closeAllAcquisitions();
new File(saveLocation).mkdirs();
new File(saveZappedLocation).mkdirs();
resultsFile = new File(saveLocation + "\\" + "results.txt");
resultsFile.createNewFile();
resultsWriter = new BufferedWriter(new FileWriter(resultsFile));

posList = gui.getPositionList();
positions = posList.getPositions();
currentWell = "";
count = 0;
for (int p = 0; p < positions.length; p++) {
	msp = positions[p];
	label = msp.getLabel();
	well = label.split("-")[0];
	if (!currentWell.equals(well)) {
		gui.message ("Starting well: " + well);
		if (!currentWell.equals("")) {
			nuclei = prefs.getInt("nuclei", 0);
			prefs.putInt("nuclei", 0);
			zappedNuclei = prefs.getInt("zappedNuclei", 0);
			prefs.putInt("zappedNuclei", 0);
			resultsWriter.write(currentWell + "\t" + nuclei + "\t" + zappedNuclei);
			resultsWriter.newLine();			
		   gui.message(currentWell + " " + nuclei + "   " + zappedNuclei);
		}
		currentWell = well;
		gui.openAcquisition(well, saveLocation + "/" + well, 1, 1, 1, nrImagesPerWell, true, true);
		wellCount = 0;
	}
	MultiStagePosition.goToPosition(msp, mmc);
	gui.message("Site: " + msp.getLabel());
	mmc.setConfig(channelGroup, imagingChannel);
	mmc.snapImage();
	tImg = mmc.getTaggedImage();
	gui.addImageToAcquisition(well, 0, 0, 0, wellCount, tImg);
	prefs.putInt("zappedNow", 0);
	// run the script recognizing the micronuclei and zapping them
	source(script);
	zappedNow = prefs.getInt("zappedNow", 0);
	if (zappedNow > 0) {
		acq2 = msp.getLabel();
		gui.message("Imaging zapped cells at site: " + acq2);
		// take the red image and save it
		gui.openAcquisition(acq2, saveZappedLocation, 1, 2, 1, 1, false, true);
		acq2Object = gui.getAcquisition(acq2);
		acq2Object.setChannelColor(1, new Color(255, 0, 0).getRGB());
		gui.addImageToAcquisition(acq2, 0, 0, 0, 0, tImg);
		mmc.setConfig(channelGroup, afterZapChannel);
		mmc.snapImage();
		tImg2 = mmc.getTaggedImage();
		gui.addImageToAcquisition(acq2, 0, 1, 0, 0, tImg2);
		gui.closeAcquisition(acq2);
		mmc.setConfig(channelGroup, imagingChannel);
	}
	wellCount++;
	count++;
}

// record the results from the last well:
nuclei = prefs.getInt("nuclei", 0);
prefs.putInt("nuclei", 0);
zappedNuclei = prefs.getInt("zappedNuclei", 0);
prefs.putInt("zappedNuclei", 0);
resultsWriter.write(currentWell + "\t" + nuclei + "\t" + zappedNuclei);
resultsWriter.newLine();			
gui.message(currentWell + " " + nuclei + "   " + zappedNuclei);

resultsWriter.close();
gui.message("Analyzed " + count + " images");